PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test
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Routines
  Routine instructions
    TextComponent ins
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this lab, you will see a block of text come up on the screen. You are asked to read out aloud the text and press Enter when you are done. After each text, you will be asked one question about the text that you just read. You will be given 4 choices for each question, please select the right answer by pressing the appropriate number key. You will get a break after 10 texts, you can press the Enter button if you want to skip that break.
    KeyboardComponent ins_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = end
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  Routine trial_readtime
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $sentence
    KeyboardComponent test_key
      allowedKeys = 'return'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        total_acc = 0
        key_press = 0
        timer = core.Clock()
        begin = timer.getTime()
        end = 0
      End Experiment:
        end = timer.getTime()
        duration = end - begin
        'show %0.3f' %(duration)
      End Routine:
        if(test_key.corr == 1):
            total_acc = total_acc + 1
        key_press = key_press + 4
        if(key_press == 4):
            text.finished = True
  Routine trial_choose
    TextComponent text_choose
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $sentence+ '\n 1' + choose_A + '\n 2 '+ choose_B + '\n 3 ' + choose_C + '\n 4 ' + choose_D
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    KeyboardComponent key_choose
      allowedKeys = '1','2','3','4'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine session_begin
    TextComponent text_begin
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        session begins
        press return
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sample_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sentence', 'I am tall(sample)'), ('choose_A', 'tall'), ('choose_B', 'short'), ('choose_C', 'red'), ('choose_D', 'green'), ('correctAns', 'a')]),
      OrderedDict([('sentence', 'I am short((sample))'), ('choose_A', 'tall'), ('choose_B', 'short'), ('choose_C', 'red'), ('choose_D', 'green'), ('correctAns', 'b')]),
      OrderedDict([('sentence', 'I am red(sample)'), ('choose_A', 'tall'), ('choose_B', 'short'), ('choose_C', 'red'), ('choose_D', 'green'), ('correctAns', 'c')]),
      OrderedDict([('sentence', 'I am green(sample)'), ('choose_A', 'tall'), ('choose_B', 'short'), ('choose_C', 'red'), ('choose_D', 'green'), ('correctAns', 'd')])]
    Routine trial_readtime
    Routine trial_choose
  LoopTerminator trials_2
  Routine session_begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sentence', 'I am tall'), ('choose_A', 'tall'), ('choose_B', 'short'), ('choose_C', 'red'), ('choose_D', 'green'), ('correctAns', 'a')]),
      OrderedDict([('sentence', 'I am short'), ('choose_A', 'tall'), ('choose_B', 'short'), ('choose_C', 'red'), ('choose_D', 'green'), ('correctAns', 'b')]),
      OrderedDict([('sentence', 'I am red'), ('choose_A', 'tall'), ('choose_B', 'short'), ('choose_C', 'red'), ('choose_D', 'green'), ('correctAns', 'c')]),
      OrderedDict([('sentence', 'I am green'), ('choose_A', 'tall'), ('choose_B', 'short'), ('choose_C', 'red'), ('choose_D', 'green'), ('correctAns', 'd')])]
    Routine trial_readtime
    Routine trial_choose
  LoopTerminator trials
  Routine end
