PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = try
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $S1
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trail_2
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $S2
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = ...
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('S1', 'coffee'), ('S2', 'pizza')]),
      OrderedDict([('S1', 'was'), ('S2', 'was')]),
      OrderedDict([('S1', 'too'), ('S2', 'too')]),
      OrderedDict([('S1', 'hot'), ('S2', 'hot')]),
      OrderedDict([('S1', 'to'), ('S2', 'to ')]),
      OrderedDict([('S1', 'drink'), ('S2', 'drink')]),
      OrderedDict([('S1', 'so'), ('S2', 'so ')]),
      OrderedDict([('S1', 'we'), ('S2', 'we')]),
      OrderedDict([('S1', 'let'), ('S2', 'let')]),
      OrderedDict([('S1', 'it'), ('S2', 'it')]),
      OrderedDict([('S1', 'cool'), ('S2', 'cool')]),
      OrderedDict([('S1', 'down'), ('S2', 'down')])]
    Routine trial
  LoopTerminator trials
  Routine break_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stim.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('S1', 'coffee'), ('S2', 'pizza')]),
      OrderedDict([('S1', 'was'), ('S2', 'was')]),
      OrderedDict([('S1', 'too'), ('S2', 'too')]),
      OrderedDict([('S1', 'hot'), ('S2', 'hot')]),
      OrderedDict([('S1', 'to'), ('S2', 'to ')]),
      OrderedDict([('S1', 'drink'), ('S2', 'drink')]),
      OrderedDict([('S1', 'so'), ('S2', 'so ')]),
      OrderedDict([('S1', 'we'), ('S2', 'we')]),
      OrderedDict([('S1', 'let'), ('S2', 'let')]),
      OrderedDict([('S1', 'it'), ('S2', 'it')]),
      OrderedDict([('S1', 'cool'), ('S2', 'cool')]),
      OrderedDict([('S1', 'down'), ('S2', 'down')])]
    Routine trail_2
  LoopTerminator trials_2
